PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # 初始化价值
        value4low_red = 1
        value4low_blue = 1
        value4low_brown = 1
        value4low_purple = 1
        value4low_green = 1

        # 初始化价值变化单位
        unit_red = 1
        unit_blue = 1
        unit_brown = 1
        unit_purple = 1
        unit_green = 1

        # 初始化轮次
        round_red = 0
        round_blue = 0
        round_brown = 0
        round_purple = 0
        round_green = 0

        # 初始化按钮
        buttonText1 = 0
        buttonText2 = 0
        positions = [(-0.4, -0.12), (0.4, -0.12)]

        # 初始化选项记录
        Choices = list()
      Begin Routine:
        #设置选项文本
        buttonText1 = str(round(eval("value4low_" + colorName),2)) + "￥来完成\n一个黑色任务"



        buttonText2 = "2￥来完成\n一个" + color + "任务"

        # 设定位置，x小于0位于左侧
        random.shuffle(positions)
        position1 = positions[0]
        position2 = positions[1]
      End Routine:
        # 记录下button1的位置
        thisPosition = position1

        #记录下当前的颜色
        thisColor = colorName

        # 记录当前试次使用的单位
        thisUnit = eval("unit_" + colorName)

        # 设置该颜色下一轮使用的单位
        exec("unit_" + colorName + " = " + str(thisUnit/2))

        # 记录当前轮次value
        thisValue = eval("value4low_" + colorName)

        # 记录下此时被试选择了 high effort(2) or low effort(1)
        if thisPosition[0] < 0:
            if resp_CEP.keys == "n":
                preference = 1
            else:
                preference = 2
        else:
            if resp_CEP.keys == "m":
                preference = 1
            else:
                preference = 2





        #设置下一轮使用的LowEffort值
        if preference == 1:
            exec("value4low_" + colorName + "=" + str(thisValue + thisUnit/2))
            thisChoice = list(["黑色", thisValue, 1])
        else:
            exec("value4low_" + colorName + "=" + str(thisValue - thisUnit/2))
            thisChoice = list([color, 2, backs])

        resultvalue = eval("value4low_" + colorName)
        exec("round_" + colorName + "=" + str("round_" + colorName + " + 1"))
        rounds = eval("round_" + colorName)
        Choices.append(thisChoice)

        # 记录信息
        thisExp.addData("preference", preference)
        thisExp.addData("thisvalue", thisValue)
        thisExp.addData("round", rounds)
        thisExp.addData("result", resultvalue)
        thisExp.addData("choice", thisChoice)
    TextComponent question
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which one is better?
      units = height
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    TextComponent button_1
      letterHeight = 0.08
      pos [set every repeat] = position1
      startVal [time (s)] = 0.5
      text [set every repeat] = $buttonText1
      units = height
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    TextComponent button_2
      letterHeight = 0.08
      pos [set every repeat] = position2
      startVal [time (s)] = 0.5
      text [set every repeat] = $buttonText2
      units = height
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    KeyboardComponent resp_CEP
      allowedKeys = 'n','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = press sace
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Nback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        letters = [chr(i) for i in range(ord('A'), ord('Z')+1)]
      Begin Routine:
        # 初始化target;presentletter
        target = eval("target" + str(n))
        presentedLetters = [0]*n
        thisLetter = np.random.choice(letters)
        letterSelected = False # 设置一个变量来表示字母选取的状态

        # 选择字母
        if not target: # 非目标试次情况
                while not letterSelected: # 保持抽选字母循环
                    thisLetter = np.random.choice(letters)# 不是目标试次的时候就随机选择一个字母
                    if len(presentedLetters) < n or thisLetter != presentedLetters[-n]: # 判断该字母是否符合要求，符合要求则跳出循环
                        letterSelected = True # 跳出循环
        else: # 目标试次情况
                thisLetter = presentedLetters[-n] # 设置当前字母为前n个字母
        presentedLetters.append(thisLetter)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      color [set every repeat] = $color_Diff
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent resp_Letter
      allowedKeys = 'n','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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  Routine instrNback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        color_instr = str(f_choice[0][0])



        instrBlock = \
        "你即将完成" + color_instr + "任务。"\
        "该任务为" + str(n) + "-back任务。\n" +\
        "你需要将屏幕上出现的字母与前"+ str(n) +\
        "个字母进行比\n较，如果相同，则按M键，如果不同" +\
        "则按N键。\n\n例如，第1个字母是P，第" + str(n+1) +\
        "个字母也是P，则为\n相同，否则为不同。无法进行" +\
        "比较的默认为不同。\n\n" +\
        "如果理解了实验任务，请按空格进入实验。"
    TextComponent block_instr
      letterHeight = 0.05
      pos = (-0.08, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrBlock
      units = height
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    KeyboardComponent resp_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Endexp
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 感谢参与！
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    KeyboardComponent resp_End
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mid
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        f_choice = random.sample(Choices,1)

        midInstr = "随机抽选的结果为：\n" + "获得" +\
        str(round(f_choice[0][1],2)) + "￥的" +\
        str(f_choice[0][0]) + "任务"

        n = f_choice[0][2]

        select_n = [n-1]
    TextComponent text_mid
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $midInstr
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    KeyboardComponent resp_mid
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 4, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'}]
    Routine trial
  LoopTerminator trials
  Routine mid
  LoopInitiator choose loopType="TrialHandler"
    Selected rows = $select_n
    conditionsFile = con_block.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Lv_Diff': 1, 'color_Diff': 'black', 'color_instr': '黑色'},
      {'Lv_Diff': 2, 'color_Diff': 'red', 'color_instr': '红色'},
      {'Lv_Diff': 3, 'color_Diff': 'blue', 'color_instr': '蓝色'},
      {'Lv_Diff': 4, 'color_Diff': 'purple', 'color_instr': '紫色'},
      {'Lv_Diff': 5, 'color_Diff': 'green', 'color_instr': '绿色'},
      {'Lv_Diff': 6, 'color_Diff': 'yellow', 'color_instr': '黄色'}]
    Routine instrNback
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = con_back.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'index1': 0, 'target1': 0, 'corrAns1': 'n', 'index2': 0, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.39742651603984, 'target1': 0, 'corrAns1': 'n', 'index2': 0, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.3728403316935073, 'target1': 0, 'corrAns1': 'n', 'index2': 0.3240404890962184, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.6359976998123091, 'target1': 0, 'corrAns1': 'n', 'index2': 0.3410011501012147, 'target2': 1, 'corrAns2': 'm', 'index3': 0.3713387769692027, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.5515201501226421, 'target1': 0, 'corrAns1': 'n', 'index2': 0.11341285762004005, 'target2': 1, 'corrAns2': 'm', 'index3': 0.5471390198970074, 'target3': 1, 'corrAns3': 'm', 'index4': 0.9556775759752746, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'}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
      Routine Nback
    LoopTerminator trials_2
  LoopTerminator choose
  Routine Endexp
